PsychoPy2experiment version="3.2.4"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 720]
  color = $[-1.000,-1.000,-1.000]
  expName = experiment
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Routines
  Routine trial
    ImageComponent presentation
      image [set every repeat] = $PATH
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("latin-1")
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ..\data\sampled_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Category', 'animal'), ('Word', 'Abejorro'), ('Mean_Valence', 2.131578947368421), ('SD_Valence', 1.3187023234692454), ('Mean_Arousal', 7.078947368421053), ('SD_Arousal', 1.5833863633154823), ('Mean_Familiarity', 4.4), ('SD_Familiarity', 2.4152294576982403), ('Mean_Concreteness', 7.52), ('SD_Concreteness', 1.5307950004273383), ('Frequency', 0.18), ('Length', 8), ('English', 'Bumblebee'), ('log_frequency', -1.7147984280919266), ('picked', True), ('PATH', '../stimuli_figure/Bumblebee.jpeg')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Almeja'), ('Mean_Valence', 4.921052631578949), ('SD_Valence', 1.6986732334124204), ('Mean_Arousal', 3.4210526315789487), ('SD_Arousal', 1.7496189383941527), ('Mean_Familiarity', 4.24), ('SD_Familiarity', 2.3853720883753127), ('Mean_Concreteness', 6.72), ('SD_Concreteness', 2.6223399220289245), ('Frequency', 0.54), ('Length', 6), ('English', 'Clam'), ('log_frequency', -0.6161861394238171), ('picked', True), ('PATH', '../stimuli_figure/Clam.jpeg')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Asno'), ('Mean_Valence', 5.315789473684211), ('SD_Valence', 1.6942711604969272), ('Mean_Arousal', 4.526315789473684), ('SD_Arousal', 1.5894388284780532), ('Mean_Familiarity', 3.32), ('SD_Familiarity', 2.3043437243605824), ('Mean_Concreteness', 6.88), ('SD_Concreteness', 1.943364779619789), ('Frequency', 3.93), ('Length', 4), ('English', 'Donkey'), ('log_frequency', 1.3686394258811698), ('picked', True), ('PATH', '../stimuli_figure/Donkey.jpeg')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Babosa'), ('Mean_Valence', 2.131578947368421), ('SD_Valence', 1.3390406535939228), ('Mean_Arousal', 5.078947368421051), ('SD_Arousal', 2.5296253215496805), ('Mean_Familiarity', 3.44), ('SD_Familiarity', 2.2), ('Mean_Concreteness', 6.76), ('SD_Concreteness', 1.920937271229854), ('Frequency', 0.36), ('Length', 6), ('English', 'Slug'), ('log_frequency', -1.0216512475319814), ('picked', True), ('PATH', '../stimuli_figure/Slug.jpeg')])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
    Routine trial
  LoopTerminator trials
